PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/sub-%s/ses-%s/sub-%s_ses-%s_exp-tiltmocs_%s' % (expInfo['sub'], expInfo['ses'], expInfo['sub'], expInfo['ses'], expInfo['date'])
  Experiment info = {'sub': '21040', 'ses': '0'}
  Full-screen window = True
  Monitor = homewood_tilt_laptop
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  expName = tilt_mocs
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instr
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    CodeComponent load_stims
      Code Type = Py
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      Before Experiment:
        import sys, os
      Begin Experiment:
        '''
        sys.path.append('../')
        from staircase_to_stimuli import build_trials_from_staircase
        sub = str(expInfo['sub']); ses = str(expInfo['ses'])
        if int(ses) == 0: #baseline (diagnostic MoCS)
            baseline_stim_dir = f'./baseline_stims/sub-{sub}/ses-{ses}'
            baseline_stim_path = f'{baseline_stim_dir}/sub-{sub}_ses-{ses}_mocs_baseline_stims.csv'
            if os.path.exists(baseline_stim_path) == False:
                #find staircase data file
                data_files = os.listdir(f'../tilt_staircase/data/sub-{sub}/ses-{ses}/')
                for file in data_files:
                    if 'csv' in file:
                        stair_data = f'../tilt_staircase/data/sub-{sub}/ses-{ses}/{file}'
                        break
                #build mocs stim from staircase
                if os.path.exists(f'./baseline_stims/sub-{sub}') == False:
                    os.mkdir(f'./baseline_stims/sub-{sub}')
                if os.path.exists(baseline_stim_dir) == False:
                    os.mkdir(baseline_stim_dir)
                build_trials_from_staircase(stair_data, reps_poss_negs = 40, reps_noss = 20, n_conditions = 7, out_csv = f'{baseline_stim_dir}/sub-{sub}_ses-{ses}_mocs_baseline_stims.csv')
            mocs_stims = baseline_stim_path
        elif int(ses) == 1 or int(ses) == 2:
            #test MoCS (drug session)
            #will come from psychometric curve done on baseline mocs
            mocs_stims = ''
        '''
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On each trial, a stimulus will flash in the center of the screen.

        The stimulus will be a circle surrounded by a larger circle. Each circle will have lines in it.

        If the tops of the lines in the center circle are pointing left (or counterclockwise), your job is to press the "z" key. If the lines are pointing right (or clockwise), press the "." (period) key.

        You can ignore the lines on the outer circle.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent set_contrast
      Code Type = Auto->JS
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      Begin Experiment:
        contrast = 0.2
    CodeComponent practice_reps
      Code Type = Auto->JS
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      Begin Experiment:
        n_practice_reps = 1
    CodeComponent size_n_SF
      Code Type = Auto->JS
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      Begin Experiment:
        online_parameters = False

        if online_parameters == False: #offline. cm as units
            center_size = (2, 2)
            surround_size = (6, 6)
            center_sf = 2.5
            surround_sf = 2.5
        else: #online/js. height as units
            center_size = (0.3, 0.3)
            surround_size = (0.9, 0.9)
            center_sf = 5
            surround_sf = 14
  Routine instr2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please ask any questions to the experimenter now.

        You will now practice a few trials. For this first practice, the stimuli will stay on the screen for 1 second.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        center_phase = random.random()
        surround_phase = random.random()
    GratingComponent surround_practice_3
      contrast [set every repeat] = contrast
      mask = circle
      ori = 15
      phase [set every repeat] = 0
      sf = 2.5
      size = (6,6)
      startVal [time (s)] = 0
      tex = sin
      units = cm
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    GratingComponent center_practice_3
      contrast = contrast
      mask = circle
      ori = 15
      phase [set every repeat] = 0
      sf = 2.5
      size = (2,2)
      startVal [time (s)] = 0
      tex = sin
      units = cm
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    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_trial
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        center_phase = Math.random();
        surround_phase = Math.random();
      Begin Routine:
        center_phase = random.random()
        surround_phase = random.random()
    GratingComponent surround_practice
      contrast = contrast
      mask = circle
      ori [set every repeat] = surround
      phase [set every repeat] = surround_phase
      sf [set every repeat] = surround_sf
      size [set every repeat] = surround_size
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      tex = sin
      units = cm
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    GratingComponent center_practice
      contrast [set every repeat] = contrast
      mask = circle
      ori [set every repeat] = center
      phase [set every repeat] = center_phase
      sf [set every repeat] = center_sf
      size [set every repeat] = center_size
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      tex = sin
      units = cm
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    KeyboardComponent key_resp_3
      allowedKeys = 'z','period'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_9
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 1.5
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      text:
        <--                    -->
        z                      .
  Routine practice_feedback
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        msg = 'msg didnt load'
      Begin Routine:
        if key_resp_3.corr == True:
            msg = 'Correct'
        else:
            msg = 'Incorrect'
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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  Routine instr3
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will practice with the real timing. The stimuli will flash on the screen quickly.

        On some trials, there will be no circle on the outside, just the inside circle. Your task is still the same (report the orientation of the center lines).
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_trial_timed
    NoiseStimComponent noise_2
      contrast = contrast
      filter = None
      imageComponent = Phase
      interpolate = nearest
      mask = circle
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.1
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      opacity [set every repeat] = noise_opacity
      sf = 0.1
      size = surround_size
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.08
      units = cm
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
    GratingComponent surround_practice_2
      contrast = contrast
      mask = circle
      opacity [set every repeat] = orient_opacity
      ori [set every repeat] = surround
      sf [set every repeat] = surround_sf
      size [set every repeat] = surround_size
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.08
      tex = sin
      units = cm
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    GratingComponent center_practice_2
      contrast = contrast
      mask = circle
      ori [set every repeat] = center
      sf [set every repeat] = center_sf
      size = center_size
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.08
      tex = sin
      units = cm
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    KeyboardComponent key_resp_4
      allowedKeys = 'z','period'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_10
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.58
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      text:
        <--                    -->
        z                      .
  Routine practice_feedback_2
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg = 'msg didnt load'
      Begin Routine:
        if key_resp_3.corr == True:
            msg = 'Correct'
        else:
            msg = 'Incorrect'
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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  Routine start_instr
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Time to start the real experiment.

        In the real experiment, the text that says "z" and "." won't appear on the screen, but your task is still the same.

        You may find that on some trials the lines look vertical. Please do your best. If you have even a gut feeling one way or the other, please choose that direction. If you have to guess on some, that is okay.

        Please ask any final questions to the experimenter.

        Press Spacebar when you are ready to begin.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    NoiseStimComponent noise_3
      contrast = contrast
      filter = None
      imageComponent = Phase
      interpolate = nearest
      mask = circle
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.1
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      opacity [set every repeat] = noise_opacity
      sf = 0.1
      size = surround_size
      startVal [time (s)] = isi
      stopVal [duration (s)] = 0.08
      units = cm
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
    CodeComponent set_phase
      Code Type = Both
      Begin Experiment:
        import random
      Begin JS Routine:
        center_phase = Math.random();
        surround_phase = Math.random();
      Begin Routine:
        center_phase = random.random()
        surround_phase = random.random()
    GratingComponent surround_grating
      contrast = contrast
      mask = circle
      opacity [set every repeat] = orient_opacity
      ori [set every repeat] = surround
      phase [set every repeat] = surround_phase
      sf [set every repeat] = surround_sf
      size [set every repeat] = surround_size
      startVal [time (s)] = $isi
      stopVal [duration (s)] = 0.08
      tex = sin
      units = cm
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    GratingComponent center_grating
      contrast = contrast
      mask = circle
      ori [set every repeat] = center
      phase [set every repeat] = center_phase
      sf [set every repeat] = center_sf
      size [set every repeat] = center_size
      startVal [time (s)] = $isi
      stopVal [duration (s)] = 0.08
      tex = sin
      units = cm
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    KeyboardComponent resp
      allowedKeys = 'z','period'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine end
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        done!

        thank you and have a pleasant day
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test_height
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    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        center_phase = Math.random();
        surround_phase = Math.random();
      Begin Routine:
        center_phase = random.random()
        surround_phase = random.random()
    GratingComponent surround_practice_4
      contrast [set every repeat] = contrast
      mask = circle
      ori = 15
      phase [set every repeat] = 0
      sf = 14
      size = (0.9,0.9)
      startVal [time (s)] = 0
      tex = sin
      units = cm
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    GratingComponent center_practice_4
      contrast = contrast
      mask = circle
      ori = 15
      phase [set every repeat] = 0
      sf = 5
      size = (0.3,0.3)
      startVal [time (s)] = 0
      tex = sin
      units = cm
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    KeyboardComponent key_resp_9
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Take a short break. Thanks for pushing through!

        When you are ready, press Spacebar to continue.
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if not trials.thisTrialN in [200, 400]:
            continueRoutine = False
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_example
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    KeyboardComponent key_resp_11
      allowedKeys = 'period'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    GratingComponent surround_practice_example
      contrast = contrast
      mask = circle
      ori [set every repeat] = -30
      phase [set every repeat] = 0
      sf [set every repeat] = surround_sf
      size [set every repeat] = surround_size
      startVal [time (s)] = 0
      tex = sin
      units = cm
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    GratingComponent center_practice_example
      contrast [set every repeat] = contrast
      mask = circle
      ori [set every repeat] = 15
      phase [set every repeat] = 0
      sf [set every repeat] = center_sf
      size [set every repeat] = center_size
      startVal [time (s)] = 0
      tex = sin
      units = cm
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    TextComponent text_15
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = for example, this one is pointing right, so you would press the period key
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    NoiseStimComponent noise
      contrast = contrast
      filter = None
      imageComponent = Phase
      interpolate = nearest
      mask = circle
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.1
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      sf = 0.1
      size = surround_size
      startVal [time (s)] = 0.0
      units = cm
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  Routine practice_feedback_timed
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        msg = 'msg didnt load'
      Begin Routine:
        if key_resp_4.corr == True:
            msg = 'Correct'
        else:
            msg = 'Incorrect'
    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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Flow
  Routine instr
  Routine instr_example
  Routine instr2
  LoopInitiator practice_no_time loopType="TrialHandler"
    conditionsFile = tilt_practice_1.csv
    loopType = sequential
    nReps = n_practice_reps
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    conditions:
      [OrderedDict([('center', 30), ('surround', 0), ('correct', 'right')]),
      OrderedDict([('center', -30), ('surround', 0), ('correct', 'left')]),
      OrderedDict([('center', 30), ('surround', 60), ('correct', 'right')]),
      OrderedDict([('center', -30), ('surround', -60), ('correct', 'left')])]
    Routine practice_trial
    Routine practice_feedback
  LoopTerminator practice_no_time
  Routine instr3
  LoopInitiator practice_timed loopType="TrialHandler"
    conditionsFile = tilt_practice_2.csv
    loopType = sequential
    nReps = n_practice_reps
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    conditions:
      [OrderedDict([('center', -30), ('surround', -60), ('correct', 'z'), ('orient_opacity', 100), ('noise_opacity', 0)]),
      OrderedDict([('center', -30), ('surround', 0), ('correct', 'z'), ('orient_opacity', 100), ('noise_opacity', 0)]),
      OrderedDict([('center', 30), ('surround', 60), ('correct', 'period'), ('orient_opacity', 100), ('noise_opacity', 0)]),
      OrderedDict([('center', 30), ('surround', 0), ('correct', 'period'), ('orient_opacity', 100), ('noise_opacity', 0)]),
      OrderedDict([('center', -30), ('surround', 69), ('correct', 'z'), ('orient_opacity', 0), ('noise_opacity', 100)]),
      OrderedDict([('center', 30), ('surround', 69), ('correct', 'period'), ('orient_opacity', 0), ('noise_opacity', 100)])]
    Routine practice_trial_timed
    Routine practice_feedback_timed
  LoopTerminator practice_timed
  Routine start_instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = mocs_stims_fixed.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('center', -2), ('surround', 15.0), ('type', 'c-2'), ('surr_type', 'poss'), ('orient_opacity', 100), ('noise_opacity', 0), ('isi', 0.5)]),
      OrderedDict([('center', -2), ('surround', 15.0), ('type', 'c-2'), ('surr_type', 'poss'), ('orient_opacity', 100), ('noise_opacity', 0), ('isi', 0.5)]),
      OrderedDict([('center', -2), ('surround', 15.0), ('type', 'c-2'), ('surr_type', 'poss'), ('orient_opacity', 100), ('noise_opacity', 0), ('isi', 0.5)]),
      OrderedDict([('center', -2), ('surround', 15.0), ('type', 'c-2'), ('surr_type', 'poss'), ('orient_opacity', 100), ('noise_opacity', 0), ('isi', 0.5)]),
      OrderedDict([('center', -2), ('surround', 15.0), ('type', 'c-2'), ('surr_type', 'poss'), ('orient_opacity', 100), ('noise_opacity', 0), ('isi', 0.5)]),
      OrderedDict([('center', -2), ('surround', 15.0), ('type', 'c-2'), ('surr_type', 'poss'), ('orient_opacity', 100), ('noise_opacity', 0), ('isi', 0.5)]),
      OrderedDict([('center', -2), ('surround', 15.0), ('type', 'c-2'), ('surr_type', 'poss'), ('orient_opacity', 100), ('noise_opacity', 0), ('isi', 0.5)]),
      OrderedDict([('center', -2), ('surround', 15.0), ('type', 'c-2'), ('surr_type', 'poss'), ('orient_opacity', 100), ('noise_opacity', 0), ('isi', 0.5)]),
      OrderedDict([('center', -2), ('surround', 15.0), ('type', 'c-2'), ('surr_type', 'poss'), ('orient_opacity', 100), ('noise_opacity', 0), ('isi', 0.5)])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
    Routine trial
    Routine break_2
  LoopTerminator trials
  Routine end
