PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/sub-%s/ses-%s/sub-%s_ses-%s_exp-tiltstaircase_%s' % (expInfo['sub'], expInfo['ses'], expInfo['sub'], expInfo['ses'], expInfo['date'])
  Experiment info = {'sub': '21040', 'ses': '0'}
  Full-screen window = True
  Monitor = homewood_tilt_laptop
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = tilt_staircase
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        corrAns = 'right'
      Begin Routine:
        thisExp.addData('center_angle', level)
        surround_opacity = 100
        if 'negs' in label:
            surround_orientation = -30
            thisExp.addData('surround_angle', surround_orientation)
        elif 'poss' in label:
            surround_orientation = 30
            thisExp.addData('surround_angle', surround_orientation)
        elif 'noss' in label:
            surround_opacity = 0
            surround_orientation = 69
    CodeComponent set_phase
      Code Type = Auto->JS
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      Begin Experiment:
        import random
      Begin Routine:
        center_phase = random.random()
        surround_phase = random.random()
    GratingComponent surround_grating
      contrast = contrast
      mask = circle
      opacity [set every repeat] = surround_opacity
      ori [set every repeat] = surround_orientation
      phase [set every repeat] = surround_phase
      sf = 2.5
      size = (6,6)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.08
      tex = sin
      units = cm
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    GratingComponent center_grating
      contrast = contrast
      mask = circle
      ori [set every repeat] = level
      phase [set every repeat] = center_phase
      sf = 2.5
      size = (2,2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.08
      tex = sin
      units = cm
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text
      color = red
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $level
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    TextComponent text_2
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_3
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.58
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      text:
        <--                    -->
        left                   right
    TextComponent label_name_for_debugging
      disabled = True
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.6
      text [set every repeat] = $label
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  Routine end
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = thank you and have a pleasant day 
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On each trial, a stimulus will flash in the center of the screen.

        The stimulus will be a circle surrounded by a larger circle. Each circle will have lines in it.

        If the tops of the lines in the center circle are pointing left (or counterclockwise), your job is to press the left arrow key. If the lines are pointing right (or clockwise), press the right arrow key.

        You can ignore the lines on the outer circle.

        Press the spacebar to proceed.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent set_contrast
      Code Type = Auto->JS
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      Begin Experiment:
        contrast = 0.2
    CodeComponent set_n_blocks
      Code Type = Auto->JS
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      Begin Experiment:
        n_blocks = 2
  Routine instr2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please ask any questions to the experimenter now.

        You will now practice a few trials. For this first practice, the stimuli will stay on the screen for 1 second.

        Press the spacebar when you are ready to practice.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_feedback
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        msg = 'msg didnt load'
      Begin Routine:
        if key_resp_3.corr == True:
            msg = 'Correct'
        else:
            msg = 'Incorrect'
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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  Routine practice_trial
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        center_phase = random.random()
        surround_phase = random.random()
    GratingComponent surround_practice
      contrast = contrast
      mask = circle
      ori [set every repeat] = surround
      phase [set every repeat] = surround_phase
      sf = 2.5
      size = (6,6)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      tex = sin
      units = cm
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    GratingComponent center_practice
      contrast [set every repeat] = contrast
      mask = circle
      ori [set every repeat] = center
      phase [set every repeat] = center_phase
      sf = 2.5
      size = (2,2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      tex = sin
      units = cm
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_9
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 1.5
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      text:
        <--                    -->
        left                   right
  Routine instr3
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will practice with the real timing. The stimuli will flash on the screen quickly.

        On some trials, there will be no circle on the outside, just the inside circle. Your task is still the same (report the orientation of the center lines).

        Press spacebar to proceed
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_trial_timed
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    GratingComponent surround_practice_2
      contrast = contrast
      mask = circle
      opacity [set every repeat] = opacity
      ori [set every repeat] = surround
      sf = 2.5
      size = (6,6)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.08
      tex = sin
      units = cm
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    GratingComponent center_practice_2
      contrast = contrast
      mask = circle
      ori [set every repeat] = center
      sf = 2.5
      size = (2,2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.08
      tex = sin
      units = cm
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_10
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.58
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      text:
        <--                    -->
        left                   right
  Routine start_instr
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Time to start the real experiment.

        In the real experiment, the text that says "left" and "right" won't appear on the screen, but your task is still the same.

        You may find that on some trials the lines look vertical. Please do your best. If you have even a gut feeling one way or the other, please choose that direction. If you have to guess on some, that is okay.

        Please ask any final questions to the experimenter.

        Press Spacebar when you are ready to begin.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        center_phase = random.random()
        surround_phase = random.random()
    GratingComponent surround_practice_3
      contrast [set every repeat] = contrast
      mask = circle
      ori = 15
      phase [set every repeat] = surround_phase
      sf = 2.5
      size = (6,6)
      startVal [time (s)] = 0
      tex = sin
      units = deg
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    GratingComponent center_practice_3
      contrast = contrast
      mask = circle
      ori = 2.5
      phase [set every repeat] = center_phase
      sf = 2.5
      size = (2,2)
      startVal [time (s)] = 0
      tex = sin
      units = deg
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    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_2
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You may take a short break.

        Press Spacebar when you are ready to resume.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #make it so it doesn't have the message on the last run of the loop
        if blocks.thisN == 2:
            continueRoutine = False
Flow
  Routine instr
  Routine instr2
  LoopInitiator practice_no_time loopType="TrialHandler"
    conditionsFile = tilt_practice_1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('center', 30), ('surround', 0), ('correct', 'right')]),
      OrderedDict([('center', -30), ('surround', 0), ('correct', 'left')]),
      OrderedDict([('center', 30), ('surround', 60), ('correct', 'right')]),
      OrderedDict([('center', -30), ('surround', -60), ('correct', 'left')])]
    Routine practice_trial
    Routine practice_feedback
  LoopTerminator practice_no_time
  Routine instr3
  LoopInitiator practice_timed loopType="TrialHandler"
    conditionsFile = tilt_practice_2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('center', -30), ('surround', -60), ('correct', 'left'), ('opacity', 100)]),
      OrderedDict([('center', -30), ('surround', 0), ('correct', 'left'), ('opacity', 100)]),
      OrderedDict([('center', 30), ('surround', 60), ('correct', 'right'), ('opacity', 100)]),
      OrderedDict([('center', 30), ('surround', 0), ('correct', 'right'), ('opacity', 100)]),
      OrderedDict([('center', -30), ('surround', 69), ('correct', 'left'), ('opacity', 0)]),
      OrderedDict([('center', 30), ('surround', 69), ('correct', 'right'), ('opacity', 0)])]
    Routine practice_trial_timed
    Routine practice_feedback
  LoopTerminator practice_timed
  Routine start_instr
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = n_blocks
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    LoopInitiator trials loopType="MultiStairHandler"
      conditionsFile = tilt_staircase.csv
      loopType = interleaved staircases
      nReps = 25
      stairType = simple
      switchMethod = random
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      conditions:
        [OrderedDict([('label', 'negc_negs'), ('nReps', 50), ('startVal', -15), ('maxVal', 15), ('minVal', -15), ('stepSizes', [5, 2, 1, 0.5, 0.25, 0.1]), ('stepType', 'lin'), ('nUp', 1), ('nDown', 1), ('nReversals', 7)]),
        OrderedDict([('label', 'posc_negs'), ('nReps', 50), ('startVal', 15), ('maxVal', 15), ('minVal', -15), ('stepSizes', [5, 2, 1, 0.5, 0.25, 0.1]), ('stepType', 'lin'), ('nUp', 1), ('nDown', 1), ('nReversals', 7)]),
        OrderedDict([('label', 'negc_poss'), ('nReps', 50), ('startVal', -15), ('maxVal', 15), ('minVal', -15), ('stepSizes', [5, 2, 1, 0.5, 0.25, 0.1]), ('stepType', 'lin'), ('nUp', 1), ('nDown', 1), ('nReversals', 7)]),
        OrderedDict([('label', 'posc_poss'), ('nReps', 50), ('startVal', 15), ('maxVal', 15), ('minVal', -15), ('stepSizes', [5, 2, 1, 0.5, 0.25, 0.1]), ('stepType', 'lin'), ('nUp', 1), ('nDown', 1), ('nReversals', 7)]),
        OrderedDict([('label', 'negc_noss'), ('nReps', 50), ('startVal', -15), ('maxVal', 15), ('minVal', -15), ('stepSizes', [5, 2, 1, 0.5, 0.25, 0.1]), ('stepType', 'lin'), ('nUp', 1), ('nDown', 1), ('nReversals', 7)]),
        OrderedDict([('label', 'posc_noss'), ('nReps', 50), ('startVal', 15), ('maxVal', 15), ('minVal', -15), ('stepSizes', [5, 2, 1, 0.5, 0.25, 0.1]), ('stepType', 'lin'), ('nUp', 1), ('nDown', 1), ('nReversals', 7)])]
      Routine trial
    LoopTerminator trials
    Routine break_2
  LoopTerminator blocks
  Routine end
